run("Detect Interest Points for Registration", "select_xml=/PATH/TO/FILES/TEST/dataset.xml process_angle=[All angles] process_channel=[Single channel (Select from List)] process_illumination=[All illuminations] process_timepoint=[All Timepoints] processing_channel=[channel 2] type_of_interest_point_detection=Difference-of-Gaussian label_interest_points=beads downsample_images subpixel_localization=[3-dimensional quadratic fit] interest_point_specification=[Weak & small (beads)] downsample_xy=1x downsample_z=1x compute_on=[CPU (Java)]);
run("Register Dataset based on Interest Points", "select_xml=/PATH/TO/FILES/TEST/dataset.xml process_angle=[All angles] process_illumination=[All illuminations] process_timepoint=[All Timepoints] registration_algorithm=[Fast 3d geometric hashing (rotation invariant)] type_of_registration=[Register timepoints individually] interest_points_channel_1=[(DO NOT register this channel)] interest_points_channel_2=beads fix_tiles=[Fix first tile] map_back_tiles=[Do not map back (use this if tiles are fixed)] transformation=Affine regularize_model model_to_regularize_with=Rigid lamba=0.10 allowed_error_for_ransac=5 significance=10);
