run("Define Multi-View Dataset", "type_of_dataset=[Image Stacks (LOCI Bioformats)] xml_filename=dataset.xml multiple_timepoints=[YES (one file per time-point)] multiple_channels=[YES (one file per channel)] _____multiple_illumination_directions=[YES (one file per illumination direction)] multiple_angles=[YES (one file per angle)] image_file_directory=/PATH/TO/FILES/TEST/ image_file_pattern=TESTRUN_TP{ttt}_AN{a}_CH{c}_IL{i}.tif timepoints_=1-4 channels_=1,2 illumination_directions_=1,2 acquisition_angles_=1-4 calibration_type=[Same voxel-size for all views] calibration_definition=[Load voxel-size(s) from file(s)] imglib2_data_container=[ArrayImg (faster)]);
